function drawshadowedtext(text, x, y) {
	setColor(0, 0, 0);	
	Overlay.drawString(text, x+1, y+1);
	setColor(255, 255, 255);	
	Overlay.drawString(text, x, y);
	updateDisplay();
}

function savewithlut(dir, filename, lut) {
	open(dir+filename);
	
	namenoext = substring(filename, 0, indexOf(filename, '.tif'));

	fontsize=14;
	setFont("SansSerif", fontsize, "bold");

	run(lut);
	run("Calibration Bar...", "location=[Upper Right] fill=White label=Black number=5 decimal=0 font=12 zoom=1 overlay");
	run("Scale Bar...", "width=1000 height=4 font=14 color=White background=None location=[Lower Right] bold overlay");
	drawshadowedtext(namenoext, 0, fontsize);
	
	wait(400);
	
	print("--> Saving with LUT="+lut);
	saveAs("PNG", dir  + namenoext+"-"+lut+".png");

	close();	
}

function action(dir, filename) {
	print("Processing "+filename);
	
	if (endsWith(dir, File.separator) == false) {
		dir += File.separator;
	}

	open(dir+filename);	
	getPixelSize(unit, pw, ph, pd);
	
	if (unit == "cm") {
		print("--> Converting from cm to um");
		pw *= 10000;
		ph *= 10000;
		setVoxelSize(pw, ph, 0, "um");
		save(dir+filename);
	}
	close();
	
	savewithlut(dir, filename, "Fire");
	savewithlut(dir, filename, "ICA");
}

//action(getInfo("image.directory"), getInfo("image.filename"));

macro "SIOS Post Action Tool - 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"{
	dir=getDirectory("Select directory containing SIOS TIFFs");
	files=getFileList(dir);

	setBatchMode(true);
	
	for (idx = 0; idx < files.length; ++idx) {
		filename = files[idx];
		if (endsWith(filename, '.tif')) {
			action(dir, filename);
		}
		showProgress((idx+1)/files.length);
	}
	
	showMessage("Processing complete.")
}	
